CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_.*_(?P<Well>[A-P][0-9]{2})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Date>[0-9]{6}).*$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,110
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DNA
    Name the primary objects to be identified:NucleiSansBord
    Typical diameter of objects, in pixel units (Min,Max):20,110
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:DNA
    Name the output image:FilteredBlue
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast

MaskImage:[module_num:8|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
    Select the input image:FilteredBlue
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:MaskBlue
    Name the primary objects to be identified:micronuclei
    Typical diameter of objects, in pixel units (Min,Max):3,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0
    Threshold correction factor:6
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:micronuclei
    Select outline color:Green
    Select objects to display:Nuclei

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Nuclei,Image|Count_micronuclei,Image|Count_NucleiSansBord,Image|Metadata_Plate,Image|Metadata_FileLocation,Image|Metadata_Series,Image|Metadata_Frame,Image|Metadata_Well,Image|Metadata_Date
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:13|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:Micronuclei.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:None
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:OrigOverlay
    Auto-scale thumbnail pixel intensities?:No
    Select the plate type:24
    Select the plate metadata:Date
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
    Workspace measurement count:1
    Experiment name:MyExpt
    Which objects should be used for locations?:micronuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Image
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:Yes
    Automatically create a filter for each plate?:No
    Create a CellProfiler Analyst workspace file?:Yes
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Object
    Enter the object name:NucleiSansBord
    Select the X-axis measurement:Number_Object_Number
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Object
    Enter the object name:micronuclei
    Select the Y-axis measurement:Number_Object_Number
    Select the Y-axis index:ImageNumber
