CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^NDExp_Well(?P<Well>[A-P]{1}[0-9]{2})_Seq(?P<Seq>[0-9]{4}).nd2
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\\\\\\\/](?P<Date>[0-9]{8})_.*_.*(?P<Plate>[0-9]{1})$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:RawData
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    Set intensity range from:Image metadata
    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:RawData
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Dapi
    Convert green to gray?:Yes
    Name the output image:Protein
    Convert blue to gray?:Yes
    Name the output image:CellStaining
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
Smooth:[module_num:6|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
    Select the input image:Dapi
    Name the output image:FilteredDapi
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
IdentifyPrimaryObjects:[module_num:7|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notes:['DAPI seems to be in the cytosplasm as well, with different level of staining between cells: difficult to segment nuclei only like this']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
    Select the input image:FilteredDapi
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,20
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CellStaining
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:CellStaining
    Select objects to measure:Cells

FilterObjects:[module_num:10|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
    Select the objects to filter:Cells
    Name the output objects:Cellswithmembrane
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_CellStaining
    Filter using a minimum measurement value?:Yes
    Minimum value:0.002
    Filter using a maximum measurement value?:No
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
EnhanceOrSuppressFeatures:[module_num:11|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
    Select the input image:Protein
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast

MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:EnhanceOrSuppressFeatures
    Select objects to measure:Cellswithmembrane

FilterObjects:[module_num:13|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
    Select the objects to filter:Cellswithmembrane
    Name the output objects:posgreen
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MaxIntensity_EnhanceOrSuppressFeatures
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:14|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RawData
    Name the output image:outlined
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:green
    Select objects to display:posgreen

CalculateMath:[module_num:15|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
    Name the output measurement:PercentPhago
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_posgreen
    Multiply the above operand by:100
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Cellswithmembrane
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:16|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
    Name the output measurement:PercentCellmembrane
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_Cellswithmembrane
    Multiply the above operand by:100
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Cells,Image|Count_Cellswithmembrane,Image|Count_Nuclei,Image|Count_posgreen,Image|Math_PercentPhago,Image|Math_PercentCellmembrane,Image|Metadata_Plate,Image|Metadata_FileLocation,Image|Metadata_Seq,Image|Metadata_Series,Image|Metadata_Well,Image|Metadata_Date
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:18|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:Laetitia_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:CellProfilerDBJune2018countcells.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cellswithmembrane
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:Laetitia
    Which objects should be used for locations?:Cellswithmembrane
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:phagocyting
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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